PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = deg
  Window size (pixels) = [1500, 1000]
  expName = EXNAT-2
  keyboardBackend = ioHub
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Routines
  Routine b2_stim
    CodeComponent code_b2
      Code Type = Both
      Begin JS Routine:
        // if the current block is not the one
        // to run, end it before it starts
        if ((run_task !== 2)) {
            loop_b2.finished = true;
        }
        // loop words of story 2
        if ((story_counter < story_2.length)) {
            // display current word
            curr_word_b2 = story_2[story_counter];
            // move on to the next word in the next trial
            story_counter = (story_counter + 1);
        }
      Begin Routine:
        # if the current block is not the one
        # to run, end it before it starts
        if run_task != 2:
            loop_b2.finished = True

        # loop words of story 2
        if (story_counter < len(story_2)):
            # display current word
            curr_word_b2 = story_2[story_counter]
            # move on to the next word in the next trial
            story_counter = story_counter + 1
      End JS Routine:
        // save which word was shown
        psychoJS.experiment.addData("word", curr_word_b2);

        // also save SDT response category
        // (aka if it was a hit (target + reaction),
        // a miss (target, but no reaction),
        // a correct rejection (no target + no reaction)
        // or a false alarm (no target, but reaction))

        // Hit:
        // if there was a target and the participant reacted
        if (((target === true) && (response_b2.keys === "a"))) {
            reaction_category = "hit";
        // Miss:
        // if there was a target but no reaction
        } else {
            if (((target === true) && (response_b2.keys === "space"))) {
                reaction_category = "miss";
        // Correct Rejection:
        // if there was no target and no reaction
            } else {
                if (((target === false) && (response_b2.keys === "space"))) {
                    reaction_category = "correct rejection";
        // False Alarm:
        // if there was no target but a reaction
                } else {
                    if (((target === false) && (response_b2.keys === "a"))) {
                        reaction_category = "false alarm";
                    }
                }
            }
        }
        // save response category
        psychoJS.experiment.addData("resp_category", reaction_category);
      End Routine:
        # save which word was shown
        thisExp.addData('word', curr_word_b2)

        # also save SDT response category
        # (aka if it was a hit (target + reaction),
        # a miss (target, but no reaction),
        # a correct rejection (no target + no reaction)
        # or a false alarm (no target, but reaction))

        # Hit:
        # if there was a target and the participant reacted
        if target == True and response_b2.keys == "a":
            reaction_category = "hit"
        # Miss:
        # if there was a target but no reaction
        elif target == True and response_b2.keys == "space":
            reaction_category = "miss"
        # Correct Rejection:
        # if there was no target and no reaction
        elif target == False and response_b2.keys == "space":
            reaction_category = "correct rejection"
        # False Alarm:
        # if there was no target but a reaction
        elif target == False and response_b2.keys == "a":
            reaction_category = "false alarm"

        # save response category
        thisExp.addData('resp_category', reaction_category)
    TextComponent words_b2
      color [set every repeat] = $color_code
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $curr_word_b2
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    KeyboardComponent response_b2
      allowedKeys = 'space', 'a'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine end
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent end_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank für Ihre Teilnahme am Experiment!

        Sie können das Experiment nun schließen, indem Sie die Leertaste drücken.
  Routine word
    CodeComponent stim_settings_1
      Code Type = Py
      Begin Routine:
        #################################################
        #                 Start Block                   #
        #################################################

        ### specify settings for the current block


        ### change background colour
        # transition from white (RGB: 255, 255, 255)
        # to medium grey (RGB: 128, 128, 128)
        change_bg_colour(window = win,
                         start_rgb = (255, 255, 255),
                         end_rgb = (10, 10, 10),
                         seconds = 2)
        # Wait for a brief period of time so bg is set
        core.wait(0.5)

        ### prepare stimuli:
        # get text nr & block kind
        curr_block = all_blocks[exp_block_counter][exp_trial_counter]
        curr_text_nr = all_texts_nrs_list[exp_block_counter]

        # get n-back condition:
        curr_nback_cond = curr_block[0] # get first character of block name
        # if it's neither 1 nor 2, it has to be a block without n-back,
        # so set curr_nback_cond to None.
        if curr_nback_cond != 1 and curr_nback_cond != 2:
            curr_nback_cond == None
        # if it is a 1 or a 2, though, set that as current n-back level:
        else:
            curr_nback_cond = int(curr_nback_cond)

        # get list with targets & list with colours
        curr_targets = all_target_lists[exp_block_counter]
        curr_colours = all_colour_lists[exp_block_counter]

        # for current text nr, get text whose name = current text nr
        curr_text = locals()[curr_text_nr]

        # start block loop
        print("starting block")

        # clear buffer of all previously recorded key events:
        event.clearEvents()

        # create empty text stimulus
        stim = visual.TextStim(win = win,
                               text = ' ',
                               pos = (0,0), # center stimulus
                               height = 2) # font height = 2° visual angle
        stim.draw()
        win.flip()

        # loop words in current text
        print("1st word in text: " + curr_text[0])

        for trial_idx, curr_word in enumerate(curr_text):
            print("current idx: " + str(trial_idx) + ", curr word:" + curr_word)

            # get current colour
            curr_colour = curr_colours[trial_idx]
            curr_target = curr_targets[trial_idx]

            # get trial number (start counting from 1, so add 1)
            curr_trial_nr = trial_idx + 1

            # show important information in console
            print("word:", curr_word, ", colour: ", curr_colour, " , target: ", str(curr_target), "trial nr: ", str(curr_trial_nr))

            ### set current word & colour as content of text stimulus
            stim.color = curr_colour
            stim.text = curr_word

            ### show word on screen
            stim.draw() # draw word on screen
            win.flip() # update the window to clear the screen and display the word

            # send word onset trigger to LSL stream
            marker_text = "block_" + curr_block + "_trial_" + str(curr_trial_nr) + "_" + curr_word + "_" + curr_colour + "_" + str(curr_target)
            #out_marker.push_sample(["WORD_ONSET_" + marker_text])

            ### record trial onset time
            onset_time = core.getTime()
            print(onset_time)


            ### wait for 50 ms
            while core.getTime() < onset_time + 0.05:
                core.wait(0.003) # wait for 3 ms
                # draw the stimulus during the waiting period
                stim.draw()
                win.flip()
                print(core.getTime())


            ### wait for key response:
            # In blocks with n-back task, participants can press "c" to indicate they saw a target colour and "space" to go to the next word/stimulus.
            # In blocks without n-back task, participants can only press "space" to go to the next word/stimulus.

            ### start recording responses
            # start "endless" while loop that looks for responses
            while True:

                # in each iteration, draw word on screen
                stim.draw()
                win.flip()

                # if participant presses space bar on their keyboard...
                if event.getKeys(['space']):
                    # get reaction time
                    curr_duration = core.getTime() - onset_time
                    ### send trigger to LSL stream to indicate participant wants to go to next word
                    marker_text = "block_" + curr_block + "_trial_" + str(curr_trial_nr) + "_" + curr_word + "_" + curr_colour + "_" + str(curr_target)
                    #out_marker.push_sample(["REACTION_NEXT_WORD_" + marker_text])
                    print("detected space key press -- RT: " + str(curr_duration))
                    # break while loop
                    break

                # if participant pressed button "c" and it's an n-back condition
                # where they're actually supposed to do that (aka not a reading baseline condition)...
                elif event.getKeys(['c']) and curr_nback_cond != None:
                    # get reaction time
                    curr_nback_RT = onset_time - core.getTime()
                    ### send trigger to LSL stream to indicate n-back response
                    marker_text = "block_" + curr_block + "_trial_" + str(curr_trial_nr) + "_" + curr_word + "_" + curr_colour + "_" + str(curr_target)
                    #out_marker.push_sample(["NBACK_REACTION_" + marker_text])
                    print("detected C key press -- n-back RT: " + str(curr_nback_RT))
                # If esc is pressed, end the experiment:
                elif event.getKeys(['escape']):
                    core.quit()

            ### end trial
            print("end trial")
            # stop display of current word
            #stim.setAutoDraw(False)
            win.flip()

            # break loop after a few trials (for testing)
            if trial_idx == 3:
                break

            ### send word offset trigger to LSL stream
            marker_text = "block_" + curr_block + "_trial_" + str(curr_trial_nr) + "_" + curr_word + "_" + curr_colour + "_" + str(curr_target)
            #out_marker.push_sample(["WORD_OFFSET_" + marker_text])

        print("finished presenting trials")

        ### Prepare questions

        # change background colour from grey (RGB: 10, 10, 10)
        # to white (RGB: 255, 255, 255)
        change_bg_colour(window = win,
                         start_rgb = (10, 10, 10),
                         end_rgb = (255, 255, 255),
                         seconds = 2)
        # Wait for a brief period of time so bg is set
        core.wait(0.5)

        # end current routine
        continueRoutine = False
      End Routine:
        ### send word offset trigger

        #pass

        #--------------------------------

        ### save data for this trial

        # get reaction time for this slide
        #curr_duration = resp_continue.rt
        #curr_target_RT = resp_target.rt

        # save everything in output
        #exp.addData('word', curr_word)
        #exp.addData('colour', curr_colour)
        #exp.addData('target', curr_target)
        #exp.addData('block_kind', curr_block_kind)
        #exp.addData('duration', curr_duration)

        # end of trial - move to next line in data output
        #exp.nextEntry()

        #--------------------------------

        ### prepare next trial

        # add 1 to trial counter
        #exp_trial_counter = exp_trial_counter + 1

        # if there are still words left, prepare stimuli / information for next trial
        #if exp_trial_counter > 300:
        #    curr_colour = all_colour_lists[exp_block_counter][exp_trial_counter]
        #    curr_block_kind = all_block_kinds[exp_block_counter][exp_trial_counter]
        #    curr_target = all_targets[exp_block_counter][exp_trial_counter]
        #    curr_text_nr = all_texts_nrs_list[exp_block_counter]
        #    curr_word = all_texts_list[exp_block_counter][exp_trial_counter]
  Routine training_word
  Routine sett_curr_trial
    CodeComponent settings_curr_run
      Code Type = Py
      disabled = True
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      Begin Routine:
        # specify settings for the current run

        # get current word & colour & info on whether it's a target trial
        curr_colour = all_colour_lists[exp_block_counter][exp_trial_counter]
        curr_block_kind = all_block_kinds[exp_block_counter][exp_trial_counter]
        curr_target = all_targets[exp_block_counter][exp_trial_counter]
        curr_text_nr = all_texts_nrs_list[exp_block_counter]
        curr_word = all_texts_list[exp_block_counter][exp_trial_counter]
      End Routine:
        ### send word offset trigger
        pass

        #--------------------------------

        ### save data for this trial

        # get reaction time for this slide
        curr_duration = pass

        # save everything in output
        exp.addData('word', curr_word)
        exp.addData('colour', curr_colour)
        exp.addData('target', curr_target)
        exp.addData('block_kind', curr_block_kind)
        exp.addData('duration', curr_duration)

        # end of trial - move to next line in data output
        #exp.nextEntry()

        #--------------------------------

        ### prepare next trial
  Routine instr
    CodeComponent set_instructions
      Code Type = Py
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      Begin Routine:
        # set instructions for current block
    TextComponent instr_1_1
      durationEstim = 3
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = Cheerio cowboy, this is the beginning of a block!
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    TextComponent instr_1_2
      durationEstim = 1
      letterHeight = 1
      pos = (0, -2)
      startVal [time (s)] = 2.0
      text = Please press „Space“ to start the block!
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    KeyboardComponent resp_1
      allowedKeys = 'space'
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine text_rating
    CodeComponent skip
      Code Type = Py
      Begin Routine:
        # end of the block, so we have to add 1 to the block counter
        # save info on block first
        #curr_block_kind = all_block_kinds[exp_block_counter][exp_trial_counter]
        #curr_text_nr = all_texts_nrs_list[exp_block_counter]

        # now change block counter
        #exp_block_counter = exp_block_counter + 1
        # and set trial counter back to 0
        #exp_trial_counter = 0

        ################################################

        # skip this component if the block was not a reading baseline block
        #if curr_block != "reading_baseline":
        #    continueRoutine: False
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = END
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  Routine settings_2
    CodeComponent prep_functions
      Code Type = Py
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      Begin Experiment:
        ### import packages:

        # for setting the output encoding to UTF-8
        import sys
        # --> if you don't do this, German "Umlaute" can't be displayed correctly:
        sys.stdout = open(sys.stdout.fileno(), mode = 'w', encoding = 'utf8', buffering = 1)

        # for getting current date & time:
        import datetime
        # numpy for being able to calculate
        import numpy as np
        # for random number generator:
        import random
        # for saving data in csv:
        import pandas as pd
        # additional timing package (I know we have core.wait, but I also want this one)
        import time
        # pylsl for pushing triggers to lsl stream:
        # from pylsl import StreamInlet, resolve_stream, StreamOutlet, StreamInfo
        # for connecting to serial ports:
        # import serial


        # from my custom scripts...
        # import all texts
        from EXNAT2_texts_MC_Qs import *
        # import some additional functions I wrote for the experiment:
        from EXNAT2_study_components import change_bg_colour
        from nback_colour_generator import create_nback_stimlist, draw_without_replacement, get_targets

        # build little function to flatten nested lists:
        def flatten_list(nested_list):
            flattened_list = []
            for item in nested_list:
                if isinstance(item, list):
                    flattened_list.extend(flatten_list(item))
                else:
                    flattened_list.append(item)
            return flattened_list


        ### Setup LSL Stream
        print("create trigger stream")
        # Create trigger stream:
        #global out_marker
        #info_marker_stream = StreamInfo('PsychoPyMarkers', 'Marker', 1, 0, 'string')
        #out_marker = StreamOutlet(info_marker_stream)
        #out_marker.push_sample(["TEST MARKER"])
    CodeComponent set_stimuli
      Code Type = Py
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      Begin Experiment:
        ### Stimulus settings

        # set colours you want to use here:
        # important: I set the colours "manually" in the trainings,
        # so change them there, too, if you change them here.

        colours = ["#D292F3", "#F989A2", "#2AB7EF", "#88BA3F"]
        print("Preparing experiment with n-back colours:", colours)

        #  #D292F3 = weird lilac with a 2000s vibe
        #  #F989A2 = bubblegum pink
        #  #2AB7EF = Twitter blue
        #  #88BA3F = medium grass green
        # (#D8A244 = dark curry-ish yellow --> excluded!)

        #   All colours have a luminance of 70 and a chroma of 74.

        #   The colours are selected for distinguishability (is that a word?!)
        #   for people with "normal" colour vision as well as for
        #   people with protanomaly (red olour vision deficiency (CVD)),
        #   deuteranomaly (green CVD) and
        #   tritanomaly (blue CVD).

        #   People with a "true" colour blindness
        #   (i.e. protanopia, deuteranopia, tritanopia)
        #   shouldn't participate in this study. */


        # ----------------------------------------------
        ### Shuffle order of texts
        print("shuffle texts")
        # collect the text IDs in lists so I know which text was shown
        all_texts_nrs_list = ["text_01", "text_02", "text_03", "text_04", "text_05", "text_06", "text_07", "text_08", "text_09"]
        # shuffle text numbers
        random.shuffle(all_texts_nrs_list)


        ### Set order of blocks
        print("set block order")
        # The first blocks should be:
        # - reading baseline + training
        # - click training
        # - in random order: 1-back (2x single task training & 1x main & 1x dual task main) & 2-back (2x single task training & 1x main & 1x dual task main)
        # - in random order: 2x reading BL main, 2x 1-back main, 2x 2-back main

        # this always comes first in the experiment
        Reading_BL = ["Reading_Baseline_training", "Reading_Baseline_main", "click_training"]

        # then you get both n-back conditions with trainings (which of them is first is randomized)
        oneback = ["1back_single_training1", "1back_single_training2", "1back_single_main", "1back_dual_main"]
        twoback = ["2back_single_training1", "2back_single_training2", "2back_single_main", "2back_dual_main"]

        # shuffle the order of the 2 lists
        main_blocks1 = [oneback, twoback]
        random.shuffle(main_blocks1)

        # flatten nested list
        main_blocks1 = flatten_list(main_blocks1)

        # now shuffle order of the last 6 main blocks:
        main_blocks2 = ["Reading_Baseline_main", "Reading_Baseline_main", "1back_dual_main",
                        "1back_dual_main", "2back_dual_main", "2back_dual_main"]
        random.shuffle(main_blocks2)

        # put them all together:
        #global all_blocks
        all_blocks = Reading_BL + main_blocks1 + main_blocks2

        ### Create n-back colour lists for all blocks

        print("create n-back colour lists")
        # The reading bl training text has 159 trials.

        # The click training has 6 trials.

        # Then we also have 4 short training blocks à 20 trials each (5 targets)
        # 4 * single training

        # We have 2 single-task main blocks,
        # one for 1-back and 1 for 2-back à 60 trials each (10 targets):
        # 2 * single main

        # There are 9 dual-task main blocks à 300 stimuli each (50 targets)
        # reading bl * 3
        # 1-back * 3
        # 2-back * 3

        # --> all in all, 15 blocks

        # So for every block, build a list with colour codes containing the right amount of targets.
        # The function is defined in another script bc it's super long,
        # I import it at the beginning of this script.

        # First, create list with length of all texts. The length of the blocks is
        # always in the same order, only the conditions change.
        blocks_textlen = [159, 300, 6, # reading bl blocks + click training
                          20, 60, 60, 300, 20, 60, 60, 300, # main blocks 1 + trainings & single tasks
                          300, 300, 300, 300, 300, 300] # main blocks 2
        blocks_target_counts = [25, 50, 1, # reading bl blocks + click training
                                5, 10, 10, 50, 5, 10, 10, 50, # main blocks 1 + trainings & single tasks
                                50, 50, 50, 50, 50, 50]
        # Now loop this list. Check which condition we have there and the create colour list for each text.
        all_colour_lists = []
        all_target_lists = []
        for block_idx, block_length in enumerate(blocks_textlen):
            # get 1st letter of block name - that tells us the condition
            block_cond = all_blocks[block_idx][0]

            # for each condition, decide which n-back level we want to assign
            # For all no-n-back blocks, we use 1 (just for the colour list generation)
            #global curr_nback_level
            if block_cond == "R":
                curr_nback_level = 1
            elif block_cond == "c":
                curr_nback_level = 1
            elif block_cond == "1":
                curr_nback_level = 1
            else: curr_nback_level = 2

            # generate colour list for current block
            #global curr_colours
            curr_colours = create_nback_stimlist(nback_level = curr_nback_level,
                                                 colour_codes = colours,
                                                 story = ["x"] * block_length,
                                                 target_abs_min = blocks_target_counts[block_idx],
                                                 target_abs_max = blocks_target_counts[block_idx],
                                                 zeroback_target = None)

            # get list of targets / non-targets
            curr_targets = get_targets(stim_list = curr_colours,
                                       nback_level = curr_nback_level)

            # add to bigger lists
            all_colour_lists.append(curr_colours)
            all_target_lists.append(curr_targets)

        print("------ finished preparing stimuli! ------")


        # ------------------------------------------

        # init trial counter for the whole experiment
        exp_trial_counter = 0

        # init block counter for the whole experiment
        exp_block_counter = 0


        ################################################

        ### Prepare information for first trial

        #curr_colour = all_colour_lists[exp_block_counter][exp_trial_counter]
        #print(curr_colour)
        #curr_block_kind = all_block_kinds[exp_block_counter][exp_trial_counter]
        #print(curr_block_kind)
        #curr_target = all_targets[exp_block_counter][exp_trial_counter]
        #print(curr_target)
        #curr_text_nr = all_texts_nrs_list[exp_block_counter]
        #print(curr_text_nr)
        #curr_word = all_texts_list[exp_block_counter][exp_trial_counter]
        #print(curr_word)

        """ IMPORTANT: """
        # Don't forget to set trial counter back to 0 after each main block!
        # Don't forget to add 1 to trial_counter after each trial and to block_counter after each block!

        print("starting experiment now!")
    TextComponent empty_placeholder
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Q1_
    CodeComponent settings_Qs
      Code Type = Py
      Begin Routine:
        # Set font colour of all answer options to black for a start
        Q1_a_col = "black"
        Q1_b_col = "black"
        Q1_c_col = "black"
        Q1_d_col = "black"

        # load first question for current text & their respective answers
        Q1_text = ﻿eval(curr_text_nr + "_Q1")
        Q1_a = eval(curr_text_nr + "_Q1_ans")[0]
        Q1_b = ﻿eval(curr_text_nr + "_Q1_ans")[1]
        Q1_a = ﻿eval(curr_text_nr + "_Q1_ans")[2]
        Q1_b = ﻿eval(curr_text_nr + "_Q1_ans")[3]
        Q1_corr = ﻿﻿eval(curr_text_nr + "_Q1_corr")
      Each Frame:
        # record key responses:
        for key in ['1', '2', '3', '4']:
            # if there was a response, check which key was pressed
            if event.getKeys(keyList = key):
                # if 1 was pressed...
                if key == '1':
                    print('a')
                    # save Q1 answer as a
                    Q1_chosen_ans = "a"
                    # and display selected option in green font
                    # and all other options in black.
                    Q1_a_col = "green"
                    Q1_b_col = "black"
                    Q1_c_col = "black"
                    Q1_d_col = "black"
                # same procedure for all other answer options:
                elif key == '2':
                    print('b')
                    Q1_chosen_ans = "b"
                    Q1_b_col = "green"
                    Q1_a_col = "black"
                    Q1_c_col = "black"
                    Q1_d_col = "black"
                elif key == '3':
                    print('c')
                    Q1_chosen_ans = "c"
                    Q1_c_col = "green"
                    Q1_a_col = "black"
                    Q1_b_col = "black"
                    Q1_d_col = "black"
                elif key == '4':
                    print('d')
                    Q1_chosen_ans = "d"
                    Q1_d_col = "green"
                    Q1_a_col = "black"
                    Q1_b_col = "black"
                    Q1_c_col = "black"
      End Routine:
        # print chosen answers for Q1, Q2 and Q3

        print("answer for Q1:" + str(Q1_chosen_ans))

        # check if answer was correct:
        if Q1_chosen_ans == Q1_corr:
            print("answer correct!")
        else:
            print("answer incorrect!")
    TextComponent Q1
      color = black
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = $Q1_text
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    KeyboardComponent submit_answers
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Q1_a
      color [set every frame] = $Q1_a_col
      letterHeight = 0.6
      pos = (0, -4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Q1_a
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    TextComponent Q1_b
      color [set every frame] = $Q1_b_col
      letterHeight = 0.6
      pos = (0, -5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Q1_b
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    TextComponent Q1_c
      color [set every frame] = $Q1_c_col
      letterHeight = 0.6
      pos = (0, -6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Q1_c
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    TextComponent Q1_d
      color [set every frame] = $Q1_d_col
      letterHeight = 0.6
      pos = (0, -7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Q1_d
      units = deg
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    TextComponent continue_instr
      color = grey
      letterHeight = 0.4
      pos = (0, -10)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Mit den Tasten 1, 2, 3 und 4 können Sie eine der Antworten auswählen.

        Bitte drücken Sie die Leertaste, wenn Sie Ihre Auswahl bestätigen möchten.
Flow
  Routine settings_2
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 17
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    Routine instr
    Routine word
    Routine Q1_
    Routine text_rating
  LoopTerminator blocks
